CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['This pipeline is modified from the cellpainting_predicts_cardiac_fibrosis repository.', '', 'Add the plate images to view when testing parameters.', '']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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif)

Metadata:[module_num:2|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notes:['There is no need to extract metadata since we are not using the GUI to processes each plate.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Well>[A-Z]{1}[0-9]{2})(?P<Site>f[0-9]{2})(?P<Channel>d[0-9]{1})
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<platemap_layout>platemap_[0-9]{1,2})/(?P<plate_id>[0-9]{1}[a-z]{1})/(?P<Plate>.*)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Assign each image to its channel.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d4")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d3")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d2")
    Name to assign these images:OrigPM
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d1")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d0")
    Name to assign these images:OrigActin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['Since we are not using the GUI to processes each plate, we do NOT need to group the images by plate.']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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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notes:['Only calculate the saturation and blur metrics as the PowerLogLogSlope and PercentMaximal metric is currently the only QC needed.']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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:No
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:No
    Calculate thresholds?:No
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
FlagImage:[module_num:6|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notes:['Saturation metric (range from 0 - 100%) is set at 1% of pixels at the highest intensity. This was optimized to avoid removal of images with minimal debris. ', '', 'Blur metric (most negative = blurry) were optimized to avoid over-correction. ']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
    Hidden:2
    Hidden:5
    Name the flag's category:Metadata
    Name the flag:Saturation_Flag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_OrigDNA
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:1
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_OrigPM
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:1
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_OrigMito
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:1
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_OrigActin
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:1
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_OrigER
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:1
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    Hidden:5
    Name the flag's category:Metadata
    Name the flag:Blur_Flag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_OrigDNA
    Flag images based on low values?:Yes
    Minimum value:-2.35
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_OrigPM
    Flag images based on low values?:Yes
    Minimum value:-2.5
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_OrigER
    Flag images based on low values?:Yes
    Minimum value:-2.4
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_OrigMito
    Flag images based on low values?:Yes
    Minimum value:-1.98
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_OrigActin
    Flag images based on low values?:Yes
    Minimum value:-1.8
    Flag images based on high values?:No
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    Ignore flag skips on last cycle?:No

ExportToSpreadsheet:[module_num:7|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notes:['Export QC results to spreadsheet for evaluation']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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|ImageQuality_PercentMinimal_OrigPM,Image|ImageQuality_PercentMinimal_OrigActin,Image|ImageQuality_PercentMinimal_OrigDNA,Image|ImageQuality_PercentMinimal_OrigER,Image|ImageQuality_PercentMinimal_OrigMito,Image|ImageQuality_LocalFocusScore_OrigMito_20,Image|ImageQuality_LocalFocusScore_OrigDNA_20,Image|ImageQuality_LocalFocusScore_OrigActin_20,Image|ImageQuality_LocalFocusScore_OrigER_20,Image|ImageQuality_LocalFocusScore_OrigPM_20,Image|ImageQuality_FocusScore_OrigActin,Image|ImageQuality_FocusScore_OrigER,Image|ImageQuality_FocusScore_OrigDNA,Image|ImageQuality_FocusScore_OrigPM,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
CorrectIlluminationCalculate:[module_num:8|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notes:['The DNA channel parameters seems to work for all CFReT plates.']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
    Select the input image:OrigDNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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notes:['The ER channels seems to suffer from slight overcorrection for all plates (less in the first one -> not F-actin adjusted). But, this overcorrection using the "Background" method is better than the increased noise that occurs when I use the "Regular" method.', '', 'If there is any issues occuring in the analysis, then this IC method could be a cause, but it is the best parameters I have for all plates.']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
    Select the input image:OrigER
    Name the output image:IllumER
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:10|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notes:['The plasma membrane channel also suffers from the slight overcorrection, but again it is better than the added noise.']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
    Select the input image:OrigPM
    Name the output image:IllumPM
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:11|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notes:['The mito channel as well sees what seems to be over correction but the actual biology looks to still be clear. ']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
    Select the input image:OrigMito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:12|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notes:['The actin channel looks to suffer from overcorrection in the third plate, which might be caused by the high cell counts in each FOV. This overcorrection is still better than the added noise or what looked to be over saturation.', '', 'In most cases, it looks to make the actin sharper and better contrast.']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
    Select the input image:OrigActin
    Name the output image:IllumActin
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:13|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notes:['The Apply modules are separated for visualization purposes.', '', 'This works the same as if I had all of the Apply modules as one.']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
    Select the input image:OrigDNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Subtract
    Select the input image:OrigER
    Name the output image:CorrER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:14|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notes:['The Apply modules are separated for visualization purposes.', '', 'This works the same as if I had all of the Apply modules as one.']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
    Select the input image:OrigPM
    Name the output image:CorrPM
    Select the illumination function:IllumPM
    Select how the illumination function is applied:Subtract
    Select the input image:OrigMito
    Name the output image:CorrMito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:15|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notes:['The Apply modules are separated for visualization purposes.', '', 'This works the same as if I had all of the Apply modules as one.']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
    Select the input image:OrigActin
    Name the output image:CorrActin
    Select the illumination function:IllumActin
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:16|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notes:['Save illumination correction function as npy.']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
    Select the type of image to save:Image
    Select the image to save:CorrDNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigDNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|CFReT_data/1.preprocessing_data/Corrected_Images/\g<Plate>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:17|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notes:['Save illumination correction function as npy.']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
    Select the type of image to save:Image
    Select the image to save:CorrER
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigER
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|CFReT_data/1.preprocessing_data/Corrected_Images/\g<Plate>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:18|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notes:['Save illumination correction function as npy.']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
    Select the type of image to save:Image
    Select the image to save:CorrPM
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigPM
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|CFReT_data/1.preprocessing_data/Corrected_Images/\g<Plate>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:19|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notes:['Save illumination correction function as npy.']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
    Select the type of image to save:Image
    Select the image to save:CorrMito
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigMito
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|CFReT_data/1.preprocessing_data/Corrected_Images/\g<Plate>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:20|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notes:['Save illumination correction function as npy.']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
    Select the type of image to save:Image
    Select the image to save:CorrActin
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigActin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|CFReT_data/1.preprocessing_data/Corrected_Images/\g<Plate>
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
