CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['This pipeline is modified from the cellpainting_predicts_cardiac_fibrosis repository.', '', 'Add the plate images to view when testing parameters.', '']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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif)

Metadata:[module_num:2|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notes:['There is no need to extract metadata since we are not using the GUI to processes each plate.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Plate>.*)_(?P<Well>[A-Z]{1}[0-9]{2})(?P<Site>f[0-9]{2})(?P<Channel>d[0-9]{1})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Assign each image to its channel.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d4")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d3")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d2")
    Name to assign these images:OrigPM
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d1")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d0")
    Name to assign these images:OrigActin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['Since we are not using the GUI to processes each plate, we do NOT need to group the images by plate.']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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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notes:['Only calculate the saturation and blur metrics as the PowerLogLogSlope and PercentMaximal metric is currently the only QC needed.']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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:No
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:No
    Calculate thresholds?:No
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
FlagImage:[module_num:6|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notes:['Measurements were manually updated or calculated (e.g., max value set as 0.10 or 0.10% can be at max value for better identification of highly overlaping cells).', 'Blur thresholds per channel calculated with IQR method.']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
    Hidden:2
    Hidden:5
    Name the flag's category:Metadata
    Name the flag:Saturation_Flag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_OrigDNA
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.10
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_OrigPM
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.10
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_OrigMito
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.10
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_OrigActin
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.10
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_OrigER
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.10
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    Hidden:5
    Name the flag's category:Metadata
    Name the flag:Blur_Flag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_OrigDNA
    Flag images based on low values?:Yes
    Minimum value:-2.2456075474546515
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_OrigPM
    Flag images based on low values?:Yes
    Minimum value:-2.4309820530015642
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_OrigER
    Flag images based on low values?:Yes
    Minimum value:-2.2825812279725524
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_OrigMito
    Flag images based on low values?:Yes
    Minimum value:-2.012531942517173
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_OrigActin
    Flag images based on low values?:Yes
    Minimum value:-1.8891791699802942
    Flag images based on high values?:No
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    Ignore flag skips on last cycle?:No

ExportToSpreadsheet:[module_num:7|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notes:['Export QC results to spreadsheet for evaluation']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|ImageQuality_PercentMinimal_OrigPM,Image|ImageQuality_PercentMinimal_OrigActin,Image|ImageQuality_PercentMinimal_OrigDNA,Image|ImageQuality_PercentMinimal_OrigER,Image|ImageQuality_PercentMinimal_OrigMito,Image|ImageQuality_LocalFocusScore_OrigMito_20,Image|ImageQuality_LocalFocusScore_OrigDNA_20,Image|ImageQuality_LocalFocusScore_OrigActin_20,Image|ImageQuality_LocalFocusScore_OrigER_20,Image|ImageQuality_LocalFocusScore_OrigPM_20,Image|ImageQuality_FocusScore_OrigActin,Image|ImageQuality_FocusScore_OrigER,Image|ImageQuality_FocusScore_OrigDNA,Image|ImageQuality_FocusScore_OrigPM,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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