CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|targeted_fibrosis_drug_screen/5.validation_plate_profiling/0.illumination_correction/loaddata_csvs
    Name of the file:
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

MeasureImageQuality:[module_num:2|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notes:['Measure and extract image quality metrics to then use for identifying poor quality images.', '', 'We only extract blur and saturation using default parameters.']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enabled:False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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:No
    Calculate thresholds?:No
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
FlagImage:[module_num:3|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notes:['Only run percent maximal for flagging in CellProfiler as it most impacts IC and we will remove images for blur downstream.']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enabled:False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
    Hidden:1
    Hidden:5
    Name the flag's category:Metadata
    Name the flag:Is_SaturatedQC
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_OrigDNA
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:1.0
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_OrigER
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:1.0
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_OrigActin
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:1.0
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_OrigMito
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:1.0
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_OrigGolgi
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:1.0
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    Ignore flag skips on last cycle?:No

Resize:[module_num:4|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
    Select the input image:OrigDNA
    Name the output image:DownsampledDNA
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.2
    Y Resizing factor:0.2
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:DownsampledDNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:6|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
    Select the input image:IllumDNA
    Name the output image:UpsampledIllumDNA
    Resizing method:Resize by specifying desired final dimensions
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    Interpolation method:Bilinear
    Method to specify the dimensions:Image
    Select the image with the desired dimensions:OrigDNA
    Additional image count:0

Resize:[module_num:7|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
    Select the input image:OrigER
    Name the output image:DownsampledER
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.2
    Y Resizing factor:0.2
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:DownsampledER
    Name the output image:IllumER
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:40
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:9|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
    Select the input image:IllumER
    Name the output image:UpsampledIllumER
    Resizing method:Resize by specifying desired final dimensions
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    Interpolation method:Bilinear
    Method to specify the dimensions:Image
    Select the image with the desired dimensions:OrigER
    Additional image count:0

Resize:[module_num:10|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
    Select the input image:OrigActin
    Name the output image:DownsampledActin
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.2
    Y Resizing factor:0.2
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:11|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
    Select the input image:DownsampledActin
    Name the output image:IllumActin
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:40
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:12|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
    Select the input image:IllumActin
    Name the output image:UpsampledIllumActin
    Resizing method:Resize by specifying desired final dimensions
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    Interpolation method:Bilinear
    Method to specify the dimensions:Image
    Select the image with the desired dimensions:OrigActin
    Additional image count:0

Resize:[module_num:13|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
    Select the input image:OrigGolgi
    Name the output image:DownsampledGolgi
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.2
    Y Resizing factor:0.2
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:14|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
    Select the input image:DownsampledGolgi
    Name the output image:IllumGolgi
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:40
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:15|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
    Select the input image:IllumGolgi
    Name the output image:UpsampledIllumGolgi
    Resizing method:Resize by specifying desired final dimensions
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    Interpolation method:Bilinear
    Method to specify the dimensions:Image
    Select the image with the desired dimensions:OrigGolgi
    Additional image count:0

Resize:[module_num:16|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
    Select the input image:OrigMito
    Name the output image:DownsampledMito
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.2
    Y Resizing factor:0.2
    Z Resizing factor:1.0
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:17|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
    Select the input image:DownsampledMito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:40
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:18|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
    Select the input image:IllumMito
    Name the output image:UpsampledIllumMito
    Resizing method:Resize by specifying desired final dimensions
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    Interpolation method:Bilinear
    Method to specify the dimensions:Image
    Select the image with the desired dimensions:OrigMito
    Additional image count:0

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumActin
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_IllumActin
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumDNA
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_IllumDNA
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumER
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_IllumER
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumMito
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_IllumMito
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumGolgi
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_IllumGolgi
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
